<?xml version="1.0" encoding="UTF-8"?>
<?xml-stylesheet type="text/xsl" href="/media/fs0199/easystore1/protein_inference_project/Mock/P2_remDB/P2_input.pep.xsl"?>
<msms_pipeline_analysis date="2021-06-11T14:08:06" xmlns="http://regis-web.systemsbiology.net/pepXML" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xsi:schemaLocation="http://regis-web.systemsbiology.net/pepXML /usr/local/tppschema/pepXML_v122.xsd" summary_xml="/media/fs0199/easystore1/protein_inference_project/Mock/P2_remDB/P2_input.pep.xml">
<dataset_derivation generation_no="0"/>
<msms_run_summary base_name="/media/fs0199/easystore1/Mock/P2/ms2/P2_run3_1000mM" msManufacturer="UNKNOWN" msModel="UNKNOWN" raw_data_type="raw" raw_data=".ms2">
<sample_enzyme name="stricttrypsin">
<specificity cut="KR" sense="C"/>
</sample_enzyme>
<search_summary base_name="/media/fs0199/easystore1/Mock/P2/ms2/P2_run3_1000mM" search_engine="Comet" search_engine_version="2018.01 rev. 2" precursor_mass_type="monoisotopic" fragment_mass_type="monoisotopic" search_id="1">
<search_database local_path="./Mock_Comm_remUNK_refDB.fasta" type="AA"/>
<enzymatic_search_constraint enzyme="Trypsin/P" max_num_internal_cleavages="3" min_number_termini="2"/>
<aminoacid_modification aminoacid="M" massdiff="15.994900" mass="147.035385" variable="Y" symbol="*"/>
<aminoacid_modification aminoacid="C" massdiff="57.021464" mass="160.030649" variable="N"/>
<terminal_modification massdiff="42.0106" protein_terminus="Y" mass="43.018425" terminus="N" variable="Y"/>
<parameter name="# comet_version " value="2018.01 rev. 2"/>
<parameter name="activation_method" value="ALL"/>
<parameter name="add_A_alanine" value="0.000000"/>
<parameter name="add_B_user_amino_acid" value="0.000000"/>
<parameter name="add_C_cysteine" value="57.021464"/>
<parameter name="add_Cterm_peptide" value="0.000000"/>
<parameter name="add_Cterm_protein" value="0.000000"/>
<parameter name="add_D_aspartic_acid" value="0.000000"/>
<parameter name="add_E_glutamic_acid" value="0.000000"/>
<parameter name="add_F_phenylalanine" value="0.000000"/>
<parameter name="add_G_glycine" value="0.000000"/>
<parameter name="add_H_histidine" value="0.000000"/>
<parameter name="add_I_isoleucine" value="0.000000"/>
<parameter name="add_J_user_amino_acid" value="0.000000"/>
<parameter name="add_K_lysine" value="0.000000"/>
<parameter name="add_L_leucine" value="0.000000"/>
<parameter name="add_M_methionine" value="0.000000"/>
<parameter name="add_N_asparagine" value="0.000000"/>
<parameter name="add_Nterm_peptide" value="0.000000"/>
<parameter name="add_Nterm_protein" value="0.000000"/>
<parameter name="add_O_ornithine" value="0.000000"/>
<parameter name="add_P_proline" value="0.000000"/>
<parameter name="add_Q_glutamine" value="0.000000"/>
<parameter name="add_R_arginine" value="0.000000"/>
<parameter name="add_S_serine" value="0.000000"/>
<parameter name="add_T_threonine" value="0.000000"/>
<parameter name="add_U_selenocysteine" value="0.000000"/>
<parameter name="add_V_valine" value="0.000000"/>
<parameter name="add_W_tryptophan" value="0.000000"/>
<parameter name="add_X_user_amino_acid" value="0.000000"/>
<parameter name="add_Y_tyrosine" value="0.000000"/>
<parameter name="add_Z_user_amino_acid" value="0.000000"/>
<parameter name="allowed_missed_cleavage" value="3"/>
<parameter name="clear_mz_range" value="0.000000 0.000000"/>
<parameter name="clip_nterm_methionine" value="0"/>
<parameter name="database_name" value="./Mock_Comm_remUNK_refDB.fasta"/>
<parameter name="decoy_prefix" value="Rev_"/>
<parameter name="decoy_search" value="1"/>
<parameter name="digest_mass_range" value="700.000000 7000.000000"/>
<parameter name="fragment_bin_offset" value="0.000000"/>
<parameter name="fragment_bin_tol" value="0.020000"/>
<parameter name="isotope_error" value="1"/>
<parameter name="mass_offsets" value=""/>
<parameter name="mass_type_fragment" value="1"/>
<parameter name="mass_type_parent" value="1"/>
<parameter name="max_fragment_charge" value="3"/>
<parameter name="max_precursor_charge" value="6"/>
<parameter name="max_variable_mods_in_peptide" value="1"/>
<parameter name="minimum_intensity" value="0"/>
<parameter name="minimum_peaks" value="10"/>
<parameter name="ms_level" value="2"/>
<parameter name="nucleotide_reading_frame" value="0"/>
<parameter name="num_enzyme_termini" value="2"/>
<parameter name="num_output_lines" value="5"/>
<parameter name="num_results" value="100"/>
<parameter name="num_threads" value="0"/>
<parameter name="output_outfiles" value="0"/>
<parameter name="output_pepxmlfile" value="1"/>
<parameter name="output_percolatorfile" value="1"/>
<parameter name="output_sqtfile" value="0"/>
<parameter name="output_sqtstream" value="0"/>
<parameter name="output_suffix" value=""/>
<parameter name="output_txtfile" value="1"/>
<parameter name="override_charge" value="0"/>
<parameter name="peptide_mass_tolerance" value="0.090000"/>
<parameter name="peptide_mass_units" value="0"/>
<parameter name="precursor_charge" value="0 0"/>
<parameter name="precursor_tolerance_type" value="0"/>
<parameter name="print_expect_score" value="0"/>
<parameter name="remove_precursor_peak" value="0"/>
<parameter name="remove_precursor_tolerance" value="1.500000"/>
<parameter name="require_variable_mod" value="0"/>
<parameter name="sample_enzyme_number" value="2"/>
<parameter name="scan_range" value="0 0"/>
<parameter name="search_enzyme_number" value="2"/>
<parameter name="show_fragment_ions" value="0"/>
<parameter name="skip_researching" value="1"/>
<parameter name="spectrum_batch_size" value="0"/>
<parameter name="theoretical_fragment_ions" value="0"/>
<parameter name="use_A_ions" value="0"/>
<parameter name="use_B_ions" value="1"/>
<parameter name="use_C_ions" value="0"/>
<parameter name="use_NL_ions" value="0"/>
<parameter name="use_X_ions" value="0"/>
<parameter name="use_Y_ions" value="1"/>
<parameter name="use_Z_ions" value="0"/>
<parameter name="variable_mod01" value="15.994900 M 0 1 -1 0 0"/>
<parameter name="variable_mod02" value="0.000000 X 0 3 -1 0 0"/>
<parameter name="variable_mod03" value="0.000000 X 0 3 -1 0 0"/>
<parameter name="variable_mod04" value="0.000000 X 0 3 -1 0 0"/>
<parameter name="variable_mod05" value="0.000000 X 0 3 -1 0 0"/>
<parameter name="variable_mod06" value="0.000000 X 0 3 -1 0 0"/>
<parameter name="variable_mod07" value="0.000000 X 0 3 -1 0 0"/>
<parameter name="variable_mod08" value="0.000000 X 0 3 -1 0 0"/>
<parameter name="variable_mod09" value="0.000000 X 0 3 -1 0 0"/>
</search_summary>
<analysis_timestamp analysis="peptideprophet" time="2021-06-11T14:13:19" id="1"/>
